PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $pic
      size = (1.2, 0.9)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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  Routine break_2
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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  Routine break_3
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine break_4
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = take a break, press the "spacebar" when you are ready to start the next phase
      wrapWidth = 1.8
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    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine test
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    ImageComponent img
      image [set every repeat] = $pic
      size = (1.2, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if (shown_before == 1 and resp.keys == "y" or shown_before == 0 and resp.keys == "n"):
            thisExp.addData("accuracy", 1)
        else:
            thisExp.addData("accuracy", 0)
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = instructions for test phase
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = prep.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pic': 'Bnw1.jpeg', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw2.JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw3 .JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw4.JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw5.JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw6.JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Col1.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col2.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col3.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col4.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col5.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col6.JPG', 'correct_response': 'c', 'shown_before': 1}]
    Routine trial
  LoopTerminator trials
  Routine break_4
  Routine break_2
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = color_images.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pic': 'Bnw1.jpeg', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw2.JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw3 .JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw4.JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw5.JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw6.JPG', 'correct_response': 'b', 'shown_before': 1},
      {'pic': 'Bnw7.JPG', 'correct_response': 'b', 'shown_before': 0},
      {'pic': 'Bnw8.JPG', 'correct_response': 'b', 'shown_before': 0},
      {'pic': 'Bnw9.JPG', 'correct_response': 'b', 'shown_before': 0},
      {'pic': 'Bnw10.JPG', 'correct_response': 'b', 'shown_before': 0},
      {'pic': 'Bnw11.JPG', 'correct_response': 'b', 'shown_before': 0},
      {'pic': 'Bnw12.JPG', 'correct_response': 'b', 'shown_before': 0},
      {'pic': 'Col1.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col2.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col3.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col4.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col5.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col6.JPG', 'correct_response': 'c', 'shown_before': 1},
      {'pic': 'Col8.JPG', 'correct_response': 'c', 'shown_before': 0},
      {'pic': 'Col9.JPG', 'correct_response': 'c', 'shown_before': 0},
      {'pic': 'Col10.JPG', 'correct_response': 'c', 'shown_before': 0},
      {'pic': 'Col11.JPG', 'correct_response': 'c', 'shown_before': 0},
      {'pic': 'Col12.JPG', 'correct_response': 'c', 'shown_before': 0}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
    Routine test
  LoopTerminator trials_2
